CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160418141927
GitHash:9969f42
ModuleCount:79
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:RAW
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Resize:[module_num:5|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notes:['Resize images to use less memory and make the analysis run faster.', '70% of originial size.']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
    Select the input image:RAW
    Name the output image:ResizedRAW
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.7
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    Interpolation method:Bicubic
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    Additional image count:0

ColorToGray:[module_num:6|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
    Select the input image:ResizedRAW
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:ResizedKi67
    Convert green to gray?:Yes
    Name the output image:ResizedPD1
    Convert blue to gray?:Yes
    Name the output image:ResizedCD3
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
CorrectIlluminationCalculate:[module_num:7|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notes:['Calculates background staining to be removed in CD3 channel.']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
    Select the input image:ResizedCD3
    Name the output image:IllumCD3_calc
    Select how the illumination function is calculated:Background
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    Block size:10
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:8|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notes:['Calculates background staining to be removed in Ki67 channel.']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
    Select the input image:ResizedKi67
    Name the output image:IllumKi67_calc
    Select how the illumination function is calculated:Background
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    Block size:10
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:9|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notes:['Calculates background staining to be removed in PD1 channel.']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
    Select the input image:ResizedPD1
    Name the output image:IllumPD1_calc
    Select how the illumination function is calculated:Background
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    Block size:10
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:10|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notes:['Corrects all channels with calculations of background staining by subtraction.']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
    Select the input image:ResizedCD3
    Name the output image:IllumCD3_corr
    Select the illumination function:IllumCD3_calc
    Select how the illumination function is applied:Subtract
    Select the input image:ResizedKi67
    Name the output image:IllumKi67_corr
    Select the illumination function:IllumKi67_calc
    Select how the illumination function is applied:Subtract
    Select the input image:ResizedPD1
    Name the output image:IllumPD1_corr
    Select the illumination function:IllumPD1_calc
    Select how the illumination function is applied:Subtract

ApplyThreshold:[module_num:11|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notes:['Threshold Ki67 to individual + cells.']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
    Select the input image:IllumKi67_corr
    Name the output image:ThreshKi67
    Select the output image type:Grayscale
    Set pixels below or above the threshold to zero?:Below threshold
    Subtract the threshold value from the remaining pixel intensities?:Yes
    Number of pixels by which to expand the thresholding around those excluded bright pixels:0.0
    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:No smoothing
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    Manual threshold:0
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
ApplyThreshold:[module_num:12|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notes:['Threshold PD1 to individual + cells.']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
    Select the input image:IllumPD1_corr
    Name the output image:ThreshPD1
    Select the output image type:Grayscale
    Set pixels below or above the threshold to zero?:Below threshold
    Subtract the threshold value from the remaining pixel intensities?:Yes
    Number of pixels by which to expand the thresholding around those excluded bright pixels:0.0
    Threshold setting version:1
    Threshold strategy:Automatic
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
ApplyThreshold:[module_num:13|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notes:['Threshold CD3 to individual + cells.']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
    Select the input image:IllumCD3_corr
    Name the output image:ThreshCD3
    Select the output image type:Grayscale
    Set pixels below or above the threshold to zero?:Below threshold
    Subtract the threshold value from the remaining pixel intensities?:Yes
    Number of pixels by which to expand the thresholding around those excluded bright pixels:0.0
    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:No smoothing
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    Manual threshold:0
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
ConserveMemory:[module_num:14|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notes:['Remove images that are not necessary for rest of the analysis so as to conserve memory.']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
    Specify which images?:Images to keep
    Select image to keep:ThreshCD3
    Select image to keep:ThreshKi67
    Select image to keep:ThreshPD1

ImageMath:[module_num:15|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:2.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:ThreshKi67_noCD3
    Image or measurement?:Image
    Select the first image:ThreshKi67
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:ThreshCD3
    Multiply the second image by:1.0
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
GrayToColor:[module_num:16|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notes:['Creates RGB composite image of  channels after threshold.', 'Red = Ki67', 'Green = PD1', 'Blue = CD3']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
    Select a color scheme:RGB
    Select the image to be colored red:ThreshKi67_noCD3
    Select the image to be colored green:ThreshPD1
    Select the image to be colored blue:ThreshCD3
    Name the output image:ColorTissue_nocap
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
IdentifyObjectsManually:[module_num:17|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
    Select the input image:ColorTissue_nocap
    Name the objects to be identified:GCs
    Retain outlines of the identified objects?:Yes
    Name the outlines:GCOutlines

IdentifyObjectsManually:[module_num:18|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
    Select the input image:ColorTissue_nocap
    Name the objects to be identified:LN
    Retain outlines of the identified objects?:Yes
    Name the outlines:LNOutlines

MaskImage:[module_num:19|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notes:['Mask PD1high regions with GC regions that were autoID’d.']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
    Select the input image:ThreshPD1
    Name the output image:MaskPD1wGCs
    Use objects or an image as a mask?:Objects
    Select object for mask:GCs
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    Invert the mask?:No

MaskImage:[module_num:20|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
    Select the input image:ThreshPD1
    Name the output image:MaskPD1wLN
    Use objects or an image as a mask?:Objects
    Select object for mask:LN
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    Invert the mask?:No

MaskImage:[module_num:21|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notes:['Mask Ki67high regions with GC regions that were autoID’d.']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
    Select the input image:ThreshKi67
    Name the output image:MaskKi67wGCs
    Use objects or an image as a mask?:Objects
    Select object for mask:GCs
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    Invert the mask?:No

MaskImage:[module_num:22|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
    Select the input image:ThreshKi67
    Name the output image:MaskKi67wLN
    Use objects or an image as a mask?:Objects
    Select object for mask:LN
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    Invert the mask?:No

MaskImage:[module_num:23|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
    Select the input image:ThreshCD3
    Name the output image:MaskCD3wGCs
    Use objects or an image as a mask?:Objects
    Select object for mask:GCs
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    Invert the mask?:No

MaskImage:[module_num:24|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
    Select the input image:ThreshCD3
    Name the output image:MaskCD3wLN
    Use objects or an image as a mask?:Objects
    Select object for mask:LN
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    Invert the mask?:No

ConserveMemory:[module_num:25|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notes:['Remove images that are not necessary for rest of the analysis so as to conserve memory.']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
    Specify which images?:Images to keep
    Select image to keep:MaskKi67wGCs
    Select image to keep:MaskPD1wGCs
    Select image to keep:GCOutlines
    Select image to keep:MaskCD3wGCs
    Select image to keep:ThreshKi67
    Select image to keep:ThreshPD1
    Select image to keep:ThreshCD3
    Select image to keep:ThreshKi67_noCD3
    Select image to keep:MaskCD3wLN
    Select image to keep:MaskKi67wLN
    Select image to keep:MaskPD1wLN
    Select image to keep:LNOutlines

ImageMath:[module_num:26|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:2.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:MaskKi67wGCs_noCD3_x2
    Image or measurement?:Image
    Select the first image:MaskKi67wGCs
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:MaskCD3wGCs
    Multiply the second image by:1.0
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
ImageMath:[module_num:27|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:MaskPD1wGCs_x2
    Image or measurement?:Image
    Select the first image:MaskPD1wGCs
    Multiply the first image by:2.0
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    Image or measurement?:Image
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
ImageMath:[module_num:28|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:MaskPD1wLN_x2
    Image or measurement?:Image
    Select the first image:MaskPD1wLN
    Multiply the first image by:2.0
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    Image or measurement?:Image
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
ImageMath:[module_num:29|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:MaskKi67wLN_x2
    Image or measurement?:Image
    Select the first image:MaskKi67wLN
    Multiply the first image by:2.0
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    Image or measurement?:Image
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
Smooth:[module_num:30|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
    Select the input image:MaskKi67wGCs_noCD3_x2
    Name the output image:BlurKi67wGCs
    Select smoothing method:Circular Average Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:2.0
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
Smooth:[module_num:31|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
    Select the input image:MaskKi67wLN_x2
    Name the output image:BlurKi67wLN
    Select smoothing method:Circular Average Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:2.0
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
Smooth:[module_num:32|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
    Select the input image:MaskPD1wGCs_x2
    Name the output image:BlurPD1wGCs
    Select smoothing method:Circular Average Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:2.0
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
Smooth:[module_num:33|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
    Select the input image:MaskPD1wLN_x2
    Name the output image:BlurPD1wLN
    Select smoothing method:Circular Average Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:2.0
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
Smooth:[module_num:34|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
    Select the input image:MaskCD3wGCs
    Name the output image:BlurCD3wGCs
    Select smoothing method:Circular Average Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:2.0
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
Smooth:[module_num:35|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
    Select the input image:MaskCD3wLN
    Name the output image:BlurCD3wLN
    Select smoothing method:Circular Average Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:2.0
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
IdentifyPrimaryObjects:[module_num:36|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
    Select the input image:BlurKi67wGCs
    Name the primary objects to be identified:Ki67cells
    Typical diameter of objects, in pixel units (Min,Max):1,8
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:Ki67Outlines
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Automatic
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    Manual threshold:0.03
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
IdentifyPrimaryObjects:[module_num:37|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
    Select the input image:BlurKi67wLN
    Name the primary objects to be identified:Ki67cellsTotal
    Typical diameter of objects, in pixel units (Min,Max):1,8
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:Ki67OutlinesTotal
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Automatic
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    Manual threshold:0.03
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
IdentifyPrimaryObjects:[module_num:38|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
    Select the input image:BlurPD1wGCs
    Name the primary objects to be identified:PD1cells
    Typical diameter of objects, in pixel units (Min,Max):3,20
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:PD1Outlines
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Automatic
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    Manual threshold:0.12
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
IdentifyPrimaryObjects:[module_num:39|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
    Select the input image:BlurPD1wLN
    Name the primary objects to be identified:PD1cellsTotal
    Typical diameter of objects, in pixel units (Min,Max):3,20
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:PD1OutlinesTotal
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Automatic
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    Manual threshold:0.12
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
IdentifyPrimaryObjects:[module_num:40|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
    Select the input image:BlurCD3wGCs
    Name the primary objects to be identified:CD3cells
    Typical diameter of objects, in pixel units (Min,Max):2,20
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:CD3Outlines
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Automatic
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    Manual threshold:0.05
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
IdentifyPrimaryObjects:[module_num:41|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
    Select the input image:BlurCD3wLN
    Name the primary objects to be identified:CD3cellsTotal
    Typical diameter of objects, in pixel units (Min,Max):2,20
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:CD3OutlinesTotal
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Automatic
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    Manual threshold:0.05
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
RelateObjects:[module_num:42|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notes:['Couple Ki67+ cell count to GC of origin.']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
    Select the input child objects:Ki67cells
    Select the input parent objects:GCs
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
RelateObjects:[module_num:43|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
    Select the input child objects:Ki67cellsTotal
    Select the input parent objects:LN
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
RelateObjects:[module_num:44|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notes:['Couple PD1+ cell count to GC of origin.']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
    Select the input child objects:PD1cells
    Select the input parent objects:GCs
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
RelateObjects:[module_num:45|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
    Select the input child objects:PD1cellsTotal
    Select the input parent objects:LN
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
RelateObjects:[module_num:46|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
    Select the input child objects:CD3cells
    Select the input parent objects:GCs
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
RelateObjects:[module_num:47|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
    Select the input child objects:CD3cellsTotal
    Select the input parent objects:LN
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
MeasureImageAreaOccupied:[module_num:48|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notes:['Measure area of GCs.']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
    Hidden:2
    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:GCs
    Retain a binary image of the object regions?:No
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    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:LN
    Retain a binary image of the object regions?:No
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
MeasureObjectSizeShape:[module_num:49|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
    Select objects to measure:GCs
    Calculate the Zernike features?:No

MeasureImageIntensity:[module_num:50|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
    Select the image to measure:MaskCD3wGCs
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:GCs
    Select the image to measure:MaskKi67wGCs
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:GCs
    Select the image to measure:MaskPD1wGCs
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:GCs

MeasureObjectIntensity:[module_num:51|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
    Hidden:3
    Select an image to measure:MaskCD3wGCs
    Select an image to measure:MaskKi67wGCs
    Select an image to measure:MaskPD1wGCs
    Select objects to measure:GCs

CalculateMath:[module_num:52|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notes:['Reverse resize and convert pixels to microns', '1/0.7 * 0.8016 = 1.145']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
    Name the output measurement:GC_Area_Microns
    Operation:None
    Select the numerator measurement type:Object
    Select the numerator objects:GCs
    Select the numerator measurement:AreaShape_Area
    Multiply the above operand by:1.145
    Raise the power of above operand by:1.0
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:53|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
    Name the output measurement:Total_GC_Area
    Operation:None
    Select the numerator measurement type:Image
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    Select the numerator measurement:AreaOccupied_AreaOccupied_GCs
    Multiply the above operand by:1.145
    Raise the power of above operand by:1.0
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:54|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
    Name the output measurement:LN_Area_Micron
    Operation:None
    Select the numerator measurement type:Image
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    Select the numerator measurement:AreaOccupied_AreaOccupied_LN
    Multiply the above operand by:1.145
    Raise the power of above operand by:1.0
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
GrayToColor:[module_num:55|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
    Select a color scheme:RGB
    Select the image to be colored red:ThreshKi67
    Select the image to be colored green:ThreshPD1
    Select the image to be colored blue:ThreshCD3
    Name the output image:ColorImage_Tissue
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
OverlayOutlines:[module_num:56|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notes:['Add outlines of GCs autoID’d to RGB composite image. ']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ColorImage_Tissue
    Name the output image:ColorImage_TissueOverlayGCs
    Outline display mode:Color
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    Width of outlines:1
    Select outlines to display:GCOutlines
    Select outline color:#FF00F3
    Load outlines from an image or objects?:Image
    Select objects to display:GCs

OverlayOutlines:[module_num:57|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ThreshKi67_noCD3
    Name the output image:GC_Ki67count_image
    Outline display mode:Color
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    Width of outlines:1
    Select outlines to display:Ki67Outlines
    Select outline color:#FF0013
    Load outlines from an image or objects?:Image
    Select objects to display:Ki67cells
    Select outlines to display:GCOutlines
    Select outline color:#FF00E8
    Load outlines from an image or objects?:Image
    Select objects to display:Ki67cells

OverlayOutlines:[module_num:58|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ThreshKi67
    Name the output image:LN_Ki67count_image
    Outline display mode:Color
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    Width of outlines:1
    Select outlines to display:Ki67OutlinesTotal
    Select outline color:#FF0013
    Load outlines from an image or objects?:Image
    Select objects to display:Ki67cells
    Select outlines to display:LNOutlines
    Select outline color:#FF00E8
    Load outlines from an image or objects?:Image
    Select objects to display:Ki67cells

OverlayOutlines:[module_num:59|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ThreshPD1
    Name the output image:GC_PD1count_image
    Outline display mode:Color
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    Width of outlines:1
    Select outlines to display:PD1Outlines
    Select outline color:#00FF0A
    Load outlines from an image or objects?:Image
    Select objects to display:PD1cells
    Select outlines to display:GCOutlines
    Select outline color:#FC00FF
    Load outlines from an image or objects?:Image
    Select objects to display:GCs

OverlayOutlines:[module_num:60|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ThreshPD1
    Name the output image:LN_PD1count_image
    Outline display mode:Color
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    Width of outlines:1
    Select outlines to display:PD1OutlinesTotal
    Select outline color:#00FF0A
    Load outlines from an image or objects?:Image
    Select objects to display:PD1cells
    Select outlines to display:LNOutlines
    Select outline color:#FC00FF
    Load outlines from an image or objects?:Image
    Select objects to display:GCs

OverlayOutlines:[module_num:61|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ThreshCD3
    Name the output image:GC_CD3count_image
    Outline display mode:Color
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    Width of outlines:1
    Select outlines to display:CD3Outlines
    Select outline color:#00FFFA
    Load outlines from an image or objects?:Image
    Select objects to display:CD3cells
    Select outlines to display:GCOutlines
    Select outline color:#FF00D9
    Load outlines from an image or objects?:Image
    Select objects to display:GCs

OverlayOutlines:[module_num:62|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ThreshCD3
    Name the output image:LN_CD3count_image
    Outline display mode:Color
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    Width of outlines:1
    Select outlines to display:CD3OutlinesTotal
    Select outline color:#00FFFA
    Load outlines from an image or objects?:Image
    Select objects to display:CD3cells
    Select outlines to display:LNOutlines
    Select outline color:#FF00D9
    Load outlines from an image or objects?:Image
    Select objects to display:GCs

DisplayDataOnImage:[module_num:63|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notes:['Add labels of GC number to RGB composite with GC outlines.']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
    Display object or image measurements?:Object
    Select the input objects:GCs
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:ColorImage_TissueOverlayGCs
    Text color:#F500FF
    Name the output image that has the measurements displayed:ColorImage_TissueOverlayGCsNumbered
    Font size (points):16
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
DisplayDataOnImage:[module_num:64|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
    Display object or image measurements?:Image
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    Measurement to display:Count_Ki67cells
    Select the image on which to display the measurements:GC_Ki67count_image
    Text color:#FF0007
    Name the output image that has the measurements displayed:GC_Ki67count_image2
    Font size (points):16
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
DisplayDataOnImage:[module_num:65|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
    Display object or image measurements?:Image
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    Measurement to display:Count_Ki67cellsTotal
    Select the image on which to display the measurements:LN_Ki67count_image
    Text color:#FF0007
    Name the output image that has the measurements displayed:LN_Ki67count_image2
    Font size (points):16
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
DisplayDataOnImage:[module_num:66|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
    Display object or image measurements?:Image
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    Measurement to display:Count_PD1cells
    Select the image on which to display the measurements:GC_PD1count_image
    Text color:#00FF02
    Name the output image that has the measurements displayed:GC_PD1count_image2
    Font size (points):16
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
DisplayDataOnImage:[module_num:67|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
    Display object or image measurements?:Image
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    Measurement to display:Count_PD1cellsTotal
    Select the image on which to display the measurements:LN_PD1count_image
    Text color:#00FF02
    Name the output image that has the measurements displayed:LN_PD1count_image2
    Font size (points):16
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
DisplayDataOnImage:[module_num:68|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
    Display object or image measurements?:Image
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    Measurement to display:Count_CD3cells
    Select the image on which to display the measurements:GC_CD3count_image
    Text color:#00E9FF
    Name the output image that has the measurements displayed:GC_CD3count_image2
    Font size (points):16
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
DisplayDataOnImage:[module_num:69|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
    Display object or image measurements?:Image
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    Measurement to display:Count_CD3cellsTotal
    Select the image on which to display the measurements:LN_CD3count_image
    Text color:#00E9FF
    Name the output image that has the measurements displayed:LN_CD3count_image2
    Font size (points):16
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:70|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:ColorImage_Tissue
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    Select method for constructing file names:From image filename
    Select image name for file prefix:RAW
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:TissueComposite
    Saved file format:tif
    Output file location:Default Output Folder sub-folder|Composites
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:71|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
    Select the type of image to save:Image
    Select the image to save:ColorImage_TissueOverlayGCsNumbered
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    Select method for constructing file names:From image filename
    Select image name for file prefix:RAW
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:TissueGCLabels
    Saved file format:tif
    Output file location:Default Output Folder sub-folder|GC_Outlines
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:72|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
    Select the type of image to save:Image
    Select the image to save:GC_Ki67count_image2
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    Select method for constructing file names:From image filename
    Select image name for file prefix:RAW
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:GCKi67count
    Saved file format:tif
    Output file location:Default Output Folder sub-folder|Ki67_cells
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:73|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
    Select the type of image to save:Image
    Select the image to save:LN_Ki67count_image2
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    Select method for constructing file names:From image filename
    Select image name for file prefix:RAW
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:LNKi67count
    Saved file format:tif
    Output file location:Default Output Folder sub-folder|Ki67_cells_Total
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:74|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
    Select the type of image to save:Image
    Select the image to save:GC_PD1count_image2
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    Select method for constructing file names:From image filename
    Select image name for file prefix:RAW
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:GCPD1count
    Saved file format:tif
    Output file location:Default Output Folder sub-folder|PD1_cells
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:75|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
    Select the type of image to save:Image
    Select the image to save:LN_PD1count_image2
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    Select method for constructing file names:From image filename
    Select image name for file prefix:RAW
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:LNPD1count
    Saved file format:tif
    Output file location:Default Output Folder sub-folder|PD1_cells_Total
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:76|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
    Select the type of image to save:Image
    Select the image to save:GC_CD3count_image2
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    Select method for constructing file names:From image filename
    Select image name for file prefix:RAW
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:GCCD3count
    Saved file format:tif
    Output file location:Default Output Folder sub-folder|CD3_cells
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:77|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
    Select the type of image to save:Image
    Select the image to save:LN_CD3count_image2
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    Select method for constructing file names:From image filename
    Select image name for file prefix:RAW
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:LNCD3count
    Saved file format:tif
    Output file location:Default Output Folder sub-folder|CD3_cells_Total
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:78|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
    Select the type of image to save:Objects
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    Select the objects to save:GCs
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    Select method for constructing file names:From image filename
    Select image name for file prefix:RAW
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:GCs
    Saved file format:tif
    Output file location:Default Output Folder sub-folder|GC_Outlines/RAW
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
    Save as grayscale or color image?:Grayscale
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:79|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|Desktop/VEFFAS STUDY/CP_Output
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    :PD1cells|Location_Center_Y,PD1cells|Location_Center_X,PD1cells|Parent_GCs,PD1cells|Number_Object_Number,CD3cells|Location_Center_Y,CD3cells|Location_Center_X,CD3cells|Parent_GCs,CD3cells|Number_Object_Number,Ki67cells|Location_Center_Y,Ki67cells|Location_Center_X,Ki67cells|Parent_GCs,Ki67cells|Number_Object_Number,LN|Location_Center_Y,LN|Location_Center_X,LN|Children_Ki67cellsTotal_Count,LN|Children_PD1cellsTotal_Count,LN|Children_CD3cellsTotal_Count,LN|Number_Object_Number,Image|Count_PD1cells,Image|Count_PD1cellsTotal,Image|Count_Ki67cells,Image|Count_Ki67cellsTotal,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Counts_
    Overwrite existing files without warning?:No
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